CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Sample>[^_]+)_(?P<Conc>[^_]+)_(?P<Channel>DAPI|555)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "555")
    Name to assign these images:TP53BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:12
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Threshold:[module_num:6|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
    Select the input image:TP53BP1
    Name the output image:TP53BP1_Toobright_raw
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.0
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    Manual threshold:0.6
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:TP53BP1_Toobright_raw
    Name the primary objects to be identified:Toobright_all
    Typical diameter of objects, in pixel units (Min,Max):20,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:8|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
    Select the input image:TP53BP1
    Name the output image:TP53BP1_Clean
    Use objects or an image as a mask?:Image
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    Select image for mask:TP53BP1_Toobright_raw
    Invert the mask?:Yes

Threshold:[module_num:9|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
    Select the input image:TP53BP1_Clean
    Name the output image:TP53BP1_PosMask
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,0.4
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.01
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskObjects:[module_num:10|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
    Select objects to be masked:Nuclei
    Name the masked objects:Nuclei_555pos
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:TP53BP1_PosMask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:TP53BP1
    Name the output image:TP53BP1_speckles
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:12|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
    Select the input image:TP53BP1_speckles
    Name the output image:TP53BP1_speckles_inNuc
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:TP53BP1_speckles_inNuc
    Name the primary objects to be identified:Puncta
    Typical diameter of objects, in pixel units (Min,Max):3,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.01,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
RelateObjects:[module_num:14|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
    Parent objects:Nuclei
    Child objects:Puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Children_Puncta_Count
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
FilterObjects:[module_num:15|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
    Select the objects to filter:Nuclei
    Name the output objects:Nuclei_withDots
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Puncta_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Puncta|Number_Object_Number,Image|Metadata_Sample,Image|Metadata_Conc,Image|Count_Nuclei,Image|Count_Nuclei_555pos,Image|Count_Nuclei_withDots,Image|Count_Puncta,Image|Count_Children_Puncta_Count,Image|Count_Toobright_all,Nuclei_withDots|Number_Object_Number,Nuclei|Number_Object_Number,Nuclei_555pos|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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